PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = emotionalMovieTask
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine Instructions
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10000
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      text:
        For this task, please pay attention to the video clips
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      Before Experiment:
        _thisDir = os.path.dirname(os.path.abspath(__file__))
        os.chdir(_thisDir)
  Routine MoviePresent
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    VariableComponent customColor2
      startExpValue = [-1,-1,-1]
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    VariableComponent customColor
      startExpValue = [-1, -1, -1]
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    CodeComponent colorHandler
      Code Type = Auto->JS
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      Begin Routine:
        if group == "neut":
            customColor = [-1, -1, -1]
            customColor2 = [-1, -1, -1]
        if group == "happy":
             customColor = [1, 1, 1]
             customColor2 = [-1, -1, -1]
        if group == "sad":
             customColor = [1, 1, 1]
             customColor2 = [1, 1, 1]
      Each Frame:
        if group == "neut":
            customColor = [-1, -1, -1]
            customColor2 = [-1, -1, -1]
        if group == "happy":
             customColor = [1, 1, 1]
             customColor2 = [-1, -1, -1]
        if group == "sad":
             customColor = [1, 1, 1]
             customColor2 = [1, 1, 1]
    CodeComponent filePathHandler
      Code Type = Auto->JS
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      Begin Routine:
        fullFilePath = os.path.join(_thisDir,
                                'resources', 'vids',
                                 fileName)
    MovieComponent movie
      backend = ffpyplayer
      forceEndRoutine = True
      movie [set every repeat] = $fullFilePath
      size = (0.8, 0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10000
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    PolygonComponent constantBlack
      fillColor = [-1, -1, -1]
      lineColor = [-1, -1, -1]
      pos = (-.7, .45)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10000
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    PolygonComponent photoDiode1
      fillColor [set every repeat] = [1,1,1]
      pos = (-.7, .45)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 2
      stopVal [duration (s)] = .20
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    PolygonComponent photoDiode2
      fillColor [set every repeat] = $customColor
      lineColor [set every repeat] = $customColor
      pos = (-.7, .45)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 2.4
      stopVal [duration (s)] = .2
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    PolygonComponent photoDiode3
      fillColor [set every repeat] = $customColor2
      lineColor [set every repeat] = $customColor2
      pos = (-.7, .45)
      shape = rectangle
      size = (.1, 0.1)
      startVal [time (s)] = 2.8
      stopVal [duration (s)] = .2
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = configFile1.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('fileName', '782-Close up Cleaning Hands Using Hand Sanitizer-ED.mp4'), ('vidLen', 14.028), ('valence', 5.0), ('arousal', 3.4167), ('impact', 3.3333), ('group', 'neut')]),
      OrderedDict([('fileName', '831-Close Up Bow Playing Violin-ED.mp4'), ('vidLen', 15.073), ('valence', 5.5), ('arousal', 3.037), ('impact', 3.1538), ('group', 'neut')]),
      OrderedDict([('fileName', '646-Woman Crocheting-ED.mp4'), ('vidLen', 7.811), ('valence', 5.3077), ('arousal', 3.4643), ('impact', 3.0263), ('group', 'neut')]),
      OrderedDict([('fileName', '685.22-Romantic_Happy_Couple_Showing_Love-ED.mp4'), ('vidLen', 9.967), ('valence', 5.913), ('arousal', 2.7143), ('impact', 2.05), ('group', 'neut')]),
      OrderedDict([('fileName', '641.1-Free Couple Holding Hands-ED.mp4'), ('vidLen', 12.539), ('valence', 6.4286), ('arousal', 3.2), ('impact', 3.2821), ('group', 'neut')]),
      OrderedDict([('fileName', '652.1-Woman In A Photocopier-ED.mp4'), ('vidLen', 10.032), ('valence', 4.3125), ('arousal', 2.7805), ('impact', 1.875), ('group', 'neut')]),
      OrderedDict([('fileName', '872-A Woman In Wheelchair Pushes Herself With A Laptop On Her Lap-ED.mp4'), ('vidLen', 10.371), ('valence', 5.4167), ('arousal', 3.5429), ('impact', 3.8919), ('group', 'neut')]),
      OrderedDict([('fileName', '724.2-A_Woman_Covering_The_Bed_With_A_White_Comforter-ED.mp4'), ('vidLen', 13.067), ('valence', 5.9583), ('arousal', 3.4091), ('impact', 2.6471), ('group', 'neut')])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
    Routine MoviePresent
  LoopTerminator trials
